PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = goNogoAlpha3
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        colorChoose = 0+randint(0,2)

        if colorChoose == 0:
            colorPick = [1.000,0.004,-1.000]
            colorName = "orange"
        else:
            colorPick = [-1.000,-1.000,1.000]
            colorName = "blue"

        if colorName == "orange":
            corrAns = "space"
        else:
            corrAns = ""

        trialText.text = str(colorChoose)
        trialCount.text = str(trials.thisN+1)
      End Routine:
        thisExp.addData('corrAns', corrAns)
        thisExp.addData('colorName', colorName)
    PolygonComponent trialCircle
      fillColor [set every repeat] = $colorPick
      lineColor [set every repeat] = $colorPick
      nVertices = 180
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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    TextComponent trialText
      letterHeight = 0.05
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent trialCount
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine setup
    CodeComponent JSCode
      Code Type = Auto->JS
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    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        counterTask = 1
  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if counterTask == 1:
            instrText.text = "'Space' for blue, nothing for orange. 'S' to start."
        else:
            instrText.text = "Again, 'space' for blue, nothing for orange. 'S' to start."

        counterTask = counterTask + 1
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Space
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    KeyboardComponent instrResp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to finish experiment.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator tasks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 20
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      Routine trial
    LoopTerminator trials
  LoopTerminator tasks
  Routine end
